WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(TaskLogicPath, RigPath, SessionPath)
-> IncludeWorkflow
  Path=AllenNeuralDynamics.Core:ReadSchemas.bonsai
  TaskLogicPath=..\local\example_AindBehaviorDirectedForagingTaskLogic.json
  RigPath=..\local\AindBehaviorDirectedForagingRig.json
  SessionPath=..\local\Session.json

GroupWorkflow LoadSchemas
    SubscribeSubject RawSessionSchema
    -> AindBehaviorDirectedForagingDataSchema.DeserializeFromJson(Type=TypeMapping<AindBehaviorDirectedForagingDataSchema.Session>)
    -> Take(Count=1)
    -> AsyncSubject SubjectSchema

    SubscribeSubject RawRigSchema
    -> AindBehaviorDirectedForagingDataSchema.DeserializeFromJson(Type=TypeMapping<AindBehaviorDirectedForagingDataSchema.AindBehaviorDirectedForagingRig>)
    -> Take(Count=1)
    -> AsyncSubject RigSchema

    SubscribeSubject RawTaskLogicSchema
    -> AindBehaviorDirectedForagingDataSchema.DeserializeFromJson(Type=TypeMapping<AindBehaviorDirectedForagingDataSchema.AindBehaviorDirectedForagingTaskLogic>)
    -> Take(Count=1)
    -> AsyncSubject TaskLogicSchema
    -> MemberSelector(Selector=TaskParameters)
    -> AsyncSubject TaskLogicParameters

GroupWorkflow SessionSettings
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=RngSeed) => #1
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=10)
    -> Bonsai.Numerics.Distributions.Sample => #4
    #1, #4 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform CheckNull
      Expression: Item1.HasValue ? Item1.Value : Item2
    -> Take(Count=1)
    -> AsyncSubject RngSeedValue
    -> PropertyMapping(Seed)
    -> Bonsai.Numerics.CreateRandom(Seed=4)
    -> Take(Count=1)
    -> AsyncSubject RngSeed

    AllenNeuralDynamics.VersionControl.CreateRepository(Path=../.)
    -> AsyncSubject Repository

    SubscribeSubject SubjectSchema
    -> PropertyMapping(SessionName(Selector=SessionName)) => #16
    SubscribeSubject RigSchema
    -> MemberSelector(Selector=DataDirectory)
    -> PropertyMapping(RootFolder) => #19
    #16, #19 -> IncludeWorkflow
      Path=AllenNeuralDynamics.Core:GenerateRootLoggingPathFromSession.bonsai
      RootFolder=..\temp_data
      SessionName=test_2026-03-02T135305Z
      SubjectName=LoggingRootPath

GroupWorkflow Initialization
    BehaviorSubject<System.Reactive.Unit> StartExperiment
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> SoftwareEvent
    BehaviorSubject<System.Reactive.Unit> EndExperiment

    SubscribeSubject StartExperiment
    -> Unit
    -> PublishSubject TriggerHarpReadDump

    BooleanProperty(Value=false)
    -> Take(Count=1) => #7
    SubscribeSubject StartExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=true) => #10
    SubscribeSubject EndExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=false) => #13
    #7, #10, #13 -> Merge
    -> BehaviorSubject ExperimentState

GroupWorkflow Hardware
    GroupWorkflow HarpDevices
        BehaviorSubject<Bonsai.Harp.HarpMessage> DelphiControllerCommands => #0
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpDelphiController.PortName)
        -> PropertyMapping(PortName) => #3
        #0, #3 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=false, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM3)
        -> PublishSubject DelphiControllerEvents

        ExternalizedMapping(Name(DisplayName=TriggerHarpReadDumpSubjectName))
        -> SubscribeSubject TriggerHarpReadDump
        -> Bonsai.Harp.CreateMessage
          MessageType=Write
          Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=Off, OperationLed=Off, Heartbeat=Enabled)
        -> MulticastSubject DelphiControllerCommands

        Unit
        -> GroupWorkflow DisableCameraTriggers
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S)
            -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateEnableCamTriggerPayload(EnableCamTrigger=0))
            -> MulticastSubject DelphiControllerCommands
            -> WorkflowOutput
        -> GroupWorkflow DisableFSM
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S)
            -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateFSMStatePayload(FSMState=0))
            -> MulticastSubject DelphiControllerCommands
            -> WorkflowOutput
        -> GroupWorkflow EnableValveLeds
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S) => #1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpDelphiController.EnableValveLeds)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Convert.ToByte(it)
            -> PropertyMapping(EnableValveLeds) => #5
            #1, #5 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateEnableValveLedsPayload(EnableValveLeds=1))
            -> MulticastSubject DelphiControllerCommands
            -> WorkflowOutput
        -> GroupWorkflow SetMinimumPokeTime
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S) => #1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpDelphiController.MinimumPokeTime)
            -> Multiply(Operand=DoubleProperty(Value=1000000))
            -> PropertyMapping(MinimumPokeTimeUS) => #5
            #1, #5 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateMinimumPokeTimeUSPayload(MinimumPokeTimeUS=100000))
            -> MulticastSubject DelphiControllerCommands
            -> WorkflowOutput
        -> GroupWorkflow SetMinimumOdorDeliveryTime
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S) => #1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpDelphiController.MinimumOdorDeliveryTime)
            -> Multiply(Operand=DoubleProperty(Value=1000000))
            -> PropertyMapping(MinOdorDeliveryTimeUS) => #5
            #1, #5 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateMinOdorDeliveryTimeUSPayload(MinOdorDeliveryTimeUS=500000))
            -> MulticastSubject DelphiControllerCommands
            -> WorkflowOutput
        -> GroupWorkflow SetFinalValveEnergizedTime
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S) => #1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpDelphiController.FinalValveEnergizedTime)
            -> Multiply(Operand=DoubleProperty(Value=1000000))
            -> PropertyMapping(FinalValveEnergizedTimeUS) => #5
            #1, #5 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateFinalValveEnergizedTimeUSPayload(FinalValveEnergizedTimeUS=110000))
            -> MulticastSubject DelphiControllerCommands
            -> WorkflowOutput
        -> GroupWorkflow SetVacuumSetupTime
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S) => #1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpDelphiController.VacuumSetupTime)
            -> Multiply(Operand=DoubleProperty(Value=1000000))
            -> PropertyMapping(VacuumSetupTimeUS) => #5
            #1, #5 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateVacuumSetupTimeUSPayload(VacuumSetupTimeUS=10000))
            -> MulticastSubject DelphiControllerCommands
            -> WorkflowOutput
        -> GroupWorkflow SetVacuumCloseTime
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S) => #1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpDelphiController.VacuumCloseTime)
            -> Multiply(Operand=DoubleProperty(Value=1000000))
            -> PropertyMapping(VacuumCloseTimeUS) => #5
            #1, #5 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateVacuumCloseTimeUSPayload(VacuumCloseTimeUS=20000))
            -> MulticastSubject DelphiControllerCommands
            -> WorkflowOutput
        -> GroupWorkflow SetOdorTransitionTime
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S) => #1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpDelphiController.OdorTransitionTime)
            -> Multiply(Operand=DoubleProperty(Value=1000000))
            -> PropertyMapping(OdorTransitionTimeUS) => #5
            #1, #5 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateOdorTransitionTimeUSPayload(OdorTransitionTimeUS=20000))
            -> MulticastSubject DelphiControllerCommands
            -> WorkflowOutput
        -> GroupWorkflow SetMaxOdorDeliveryTime
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S) => #1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpDelphiController.MaxOdorDeliveryTime)
            -> Multiply(Operand=DoubleProperty(Value=1000000))
            -> PropertyMapping(MaxOdorDeliveryTimeUS) => #5
            #1, #5 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateMaxOdorDeliveryTimeUSPayload(MaxOdorDeliveryTimeUS=600000))
            -> MulticastSubject DelphiControllerCommands
            -> WorkflowOutput
        -> Delay(DueTime=PT1S)
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateQueuedOdorMaskPayload(QueuedOdorMask=0))
        -> MulticastSubject DelphiControllerCommands
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateFSMStatePayload(FSMState=1))
        -> MulticastSubject DelphiControllerCommands

        SubscribeSubject DelphiControllerEvents
        -> AllenNeuralDynamics.DelphiController.Parse(Register=AllenNeuralDynamics.DelphiController.QueuedOdorMask)
        -> Equal(Operand=WorkflowProperty<System.UInt16>(Value=0))
        -> BehaviorSubject DelphiControllerQueueReady

        Bonsai.Windows.Input.MouseWheel => #30
        FloatProperty(Value=0.01) => #31
        #30, #31 -> CombineLatest
        -> Multiply
        -> PublishSubject WheelDisplacement

        PublishSubject<System.Int32> DeliverPellets

    GroupWorkflow Cameras
        SubscribeSubject RigSchema
        -> Take(Count=1)
        -> MemberSelector(Selector=TriggeredCameraController)
        -> AsyncSubject TriggeredCameraController
        -> MemberSelector(Selector=FrameRate.Value)
        -> AsyncSubject CameraFrameRate

        SubscribeSubject CameraFrameRate
        -> AllenNeuralDynamics.DelphiController.Format(MessageType=Write, Register=AllenNeuralDynamics.DelphiController.FrameRate)
        -> MulticastSubject DelphiControllerCommands
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateCamPinPayload(CamPin=26))
        -> MulticastSubject DelphiControllerCommands
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateDutyCyclePayload(DutyCycle=0.5))
        -> MulticastSubject DelphiControllerCommands

        SubscribeSubject DelphiControllerEvents
        -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
        -> AllenNeuralDynamics.DelphiController.Parse(Register=AllenNeuralDynamics.DelphiController.TimestampedCamPinState)
        -> MemberSelector(Selector=Seconds)
        -> PublishSubject FrameEvent

        SubscribeSubject TriggeredCameraController
        -> MemberSelector(Selector=Cameras)
        -> Merge
        -> CreateObservable InstantiateCamera => #21
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject ThisCamera

            BooleanProperty(Value=true)
            -> MulticastSubject TriggeredCamerasInitialized
            -> Take(Count=1) => #5
            SubscribeSubject ThisCamera
            -> MemberSelector(Selector=Value)
            -> PropertyMapping => #8
              SerialNumber(Selector=SerialNumber)
              ExposureTime(Selector=Exposure)
              Gain(Selector=Gain)
              Binning(Selector=Binning)
              ColorProcessing(Selector=ColorProcessing)
              Gamma(Selector=Gamma)
              PixelFormat(Selector=PixelFormat)
              AdcBitDepth(Selector=AdcBitDepth)
            SubscribeSubject ThisCamera
            -> MemberSelector(Selector=Value)
            -> MemberSelector(Selector=RegionOfInterest)
            -> InputMapping(Value(Selector="X,Y,Width,Height"))
            -> PropertySource<Bonsai.Vision.Crop,OpenCV.Net.Rect>(MemberName=RegionOfInterest, Value(X=0, Y=0, Width=0, Height=0))
            -> PropertyMapping(RegionOfInterest) => #14
            #5, #8, #14 -> LimitedAindSpinnakerCapture => #15
              Index=nil
              SerialNumber=18575294
              ColorProcessing=Default
              ExposureTime=5000
              Gain=0
              Binning=1
              Gamma=nil
              PixelFormat=Mono8
              RegionOfInterest(X=0, Y=0, Width=0, Height=0)
              AdcBitDepth=Bit8
            SubscribeSubject FrameEvent => #16
            #15, #16 -> Zip
            -> Bonsai.Harp.CreateTimestamped => #18
            SubscribeSubject ThisCamera
            -> MemberSelector(Selector=Key) => #20
            #18, #20 -> WithLatestFrom
            -> WorkflowOutput
        Timer(DueTime=PT0S, Period=PT0.1S) => #22
        #21, #22 -> Zip
        -> MemberSelector(Selector=Item1)
        -> Merge
        -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
        -> ReplaySubject TriggeredCamerasStream(BufferSize=nil)

        BehaviorSubject<System.Boolean> TriggeredCamerasInitialized

        SubscribeSubject TriggeredCamerasInitialized
        -> IntProperty(Value=1) => #30
        IntProperty(Value=0)
        -> Take(Count=1) => #32
        #30, #32 -> Merge
        -> Accumulate => #34
        SubscribeSubject TriggeredCameraController
        -> MemberSelector(Selector=Cameras)
        -> MemberSelector(Selector=Count)
        -> PropertyMapping(Value) => #38
        #34, #38 -> GreaterThanOrEqual(Operand=IntProperty(Value=1))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> Delay(DueTime=PT0.1S)
        -> BehaviorSubject TriggeredCamerasReady

    Timer(DueTime=PT0S, Period=PT0.005S) => #2
    -> Unit => #3
    #2 -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #5
    #3, #5 -> Zip
    -> Bonsai.Harp.CreateTimestamped => #7
    Annotation Placeholder(Text="Debug harp timebase, will probably come from sniff detector") => #8
    #7, #8 -> BehaviorSubject TimeBase

GroupWorkflow Tracking
    SubscribeSubject TriggeredCamerasStream
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Key)
        -> Equal(Operand=StringProperty(Value=MainCamera))
        -> WorkflowOutput
    -> Merge
    -> MemberSelector(Selector=Value.Image) => #3
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=MaskRegion.MaskPolygon)
    -> PointListToRegion
    -> PropertyMapping(Regions) => #7
    #3, #7 -> Bonsai.Vision.MaskPolygon
      Regions
        ArrayOfPoint
          Point(X=9, Y=134)
          Point(X=323, Y=76)
          Point(X=615, Y=70)
          Point(X=719, Y=120)
          Point(X=719, Y=539)
          Point(X=269, Y=539)
          Point(X=0, Y=539)
          Point(X=9, Y=277)
      MaskType=ToZero
      FillValue(Val0=150, Val1=150, Val2=150, Val3=150)
    -> Bonsai.Vision.Threshold(ThresholdValue=11, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.MorphologicalOperator(Size(Width=4, Height=4), Anchor(X=-1, Y=-1), Shape=Rectangle, Iterations=1, Operation=Open)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxSimple, Offset(X=0, Y=0), MinArea=10, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> PublishSubject Contour

ExternalizedMapping(StartKey(Category=HotKeys), StopKey(Category=HotKeys), TriggersKey)
-> GroupWorkflow OperationControl
    ExternalizedMapping(Filter(DisplayName=StartKey))
    -> Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift", SuppressRepetitions=false)
    -> Unit
    -> Take(Count=1)
    -> MulticastSubject StartExperiment

    ExternalizedMapping(Filter(DisplayName=StopKey))
    -> Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel A B C Shift", SuppressRepetitions=false)
    -> Unit
    -> Take(Count=1)
    -> MulticastSubject EndExperiment

    ExternalizedMapping(Filter(DisplayName=TriggersKey))
    -> Bonsai.Windows.Input.KeyDown(Filter="MButton ShiftKey Capital CapsLock D P T Shift", SuppressRepetitions=false)
    -> Unit
    -> Take(Count=1)
    -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateEnableCamTriggerPayload(EnableCamTrigger=1))
    -> MulticastSubject DelphiControllerCommands

Defer TaskLogic => #9
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=Trials)
    -> Merge
    -> CreateObservable DoTrial
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject TrialDefinition

        SubscribeSubject TrialDefinition => #3
        SubscribeSubject DelphiControllerQueueReady
        -> Condition => #5
            WorkflowInput Source1
            -> WorkflowOutput
        #3, #5 -> Zip
        -> MemberSelector(Selector=Item1.OdorDefinition.OlfactometerMask)
        -> InputMapping(QueuedOdorMask(Selector=it))
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateQueuedOdorMaskPayload(QueuedOdorMask=2))
        -> MulticastSubject DelphiControllerCommands
        -> Take(Count=1)
        -> AsyncSubject OdorQueued

        SubscribeSubject OdorQueued => #13
        SubscribeSubject TrialTrigger => #14
        #13, #14 -> SubscribeWhen
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateForceFSMPayload(ForceFSM=1))
        -> MulticastSubject DelphiControllerCommands

        SubscribeSubject TrialDefinition
        -> MemberSelector(Selector=TrialTimeout)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT15S)
        -> Unit => #23
        SubscribeSubject WheelDisplacement
        -> Accumulate => #25
        SubscribeSubject TrialDefinition
        -> MemberSelector(Selector=DigThreshold) => #27
        #25, #27 -> WithLatestFrom
        -> Condition DisplacementThresholdReached
            WorkflowInput Source1
            -> GreaterThan
            -> WorkflowOutput
        -> First
        -> SelectMany ThresholdReached
            WorkflowInput Source1

            SubscribeSubject TrialDefinition
            -> MemberSelector(Selector=ThresholdReward)
            -> MulticastSubject DeliverPellets => #3
            SubscribeSubject TrialDefinition
            -> MemberSelector(Selector=ThresholdPunishment)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #7
            #3, #7 -> Delay(DueTime=PT0S)
            -> Take(Count=1)
            -> WorkflowOutput
        -> Unit => #32
        #23, #32 -> Merge => #33
        SubscribeSubject TrialTrigger => #34
        #33, #34 -> SubscribeWhen
        -> Take(Count=1)
        -> WorkflowOutput
    -> Concat

    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=TriggerSource) => #6
    -> AindBehaviorDirectedForagingDataSchema.MatchTriggerSource(Type=TypeMapping<AindBehaviorDirectedForagingDataSchema.RadiusThreshold>)
    -> SelectMany RadiusThresholdTrigger => #8
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject RadiusThreshold

        SubscribeSubject Contour
        -> MemberSelector(Selector=Centroid) => #4
        SubscribeSubject RadiusThreshold
        -> MemberSelector(Selector=TriggerCenter) => #6
        #4, #6 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform EuclideanDistance => #8
          Expression: Math.Sqrt(Math.Pow(it.Item2.X - it.Item1.X, 2) + Math.Pow(it.Item2.Y - it.Item1.Y, 2))
        SubscribeSubject RadiusThreshold
        -> MemberSelector(Selector=Radius) => #10
        #8, #10 -> WithLatestFrom
        -> LessThan
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> Unit
        -> WorkflowOutput
    #6 -> AindBehaviorDirectedForagingDataSchema.MatchTriggerSource(Type=TypeMapping<AindBehaviorDirectedForagingDataSchema.RandomisedTimer>)
    -> SelectMany RandomisedTimerTrigger => #10
        WorkflowInput Source1
        -> Take(Count=1)
        -> MemberSelector(Selector=Distribution)
        -> AsyncSubject TimerDistribution

        SubscribeSubject TimerDistribution => #4
        SubscribeSubject RngSeed
        -> PropertyMapping(RandomSource) => #6
        #4, #6 -> AindBehaviorDirectedForagingDataSchema.SampleDistribution(RandomSource="")
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> SelectMany WaitTimer
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject TimeSpan

            Unit => #3
            SubscribeSubject TimeSpan
            -> PropertyMapping(DueTime) => #5
            #3, #5 -> Delay(DueTime=PT17.648S)
            -> Take(Count=1)
            -> WorkflowOutput
        -> Take(Count=1)
        -> Repeat
        -> WorkflowOutput
    #6 -> AindBehaviorDirectedForagingDataSchema.MatchTriggerSource(Type=TypeMapping<AindBehaviorDirectedForagingDataSchema.FixedTimer>)
    -> SelectMany FixedTimerTrigger => #12
        WorkflowInput Source1
        -> Take(Count=1)
        -> MemberSelector(Selector=Sequence)
        -> AsyncSubject Sequence

        IntProperty(Value=0)
        -> BehaviorSubject CurrentIndex

        SubscribeSubject TimeBase
        -> MemberSelector(Selector=Seconds)
        -> First
        -> Take(Count=1)
        -> AsyncSubject StartTime

        SubscribeSubject TimeBase
        -> MemberSelector(Selector=Seconds) => #12
        SubscribeSubject StartTime => #13
        #12, #13 -> CombineLatest
        -> Subtract
        -> PublishSubject ElapsedTime

        SubscribeSubject CurrentIndex
        -> Condition
            WorkflowInput Source1 => #0
            SubscribeSubject Sequence
            -> MemberSelector(Selector=Count) => #2
            #0, #2 -> WithLatestFrom
            -> LessThan
            -> WorkflowOutput
        -> SelectMany WaitForTime
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Index

            SubscribeSubject Sequence => #3
            SubscribeSubject Index
            -> PropertyMapping(Value) => #5
            #3, #5 -> Index(Operand=IntProperty(Value=0))
            -> Take(Count=1)
            -> AsyncSubject Time

            SubscribeSubject ElapsedTime => #9
            SubscribeSubject Time => #10
            #9, #10 -> WithLatestFrom
            -> GreaterThanOrEqual
            -> Condition => #13
                WorkflowInput Source1
                -> WorkflowOutput
            SubscribeSubject Index => #14
            #13, #14 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Take(Count=1)
            -> WorkflowOutput
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject CurrentIndex
        -> Unit
        -> WorkflowOutput
    #8, #10, #12 -> Merge
    -> PublishSubject TrialTrigger
SubscribeSubject EndExperiment => #10
#9, #10 -> TakeUntil => #11
SubscribeSubject StartExperiment => #12
#11, #12 -> SubscribeWhen

SubscribeSubject TriggeredCamerasStream
-> Condition
    WorkflowInput Source1
    -> MemberSelector(Selector=Key)
    -> Equal(Operand=StringProperty(Value=MainCamera))
    -> WorkflowOutput
-> Merge
-> MemberSelector(Selector=Value.Image)
